PsychoPy2experiment version="2022.3.0dev6"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save wide csv file = False
  Screen = 1
  Units = norm
  Use version = 2022.3.0dev6
  Window size (pixels) = [1920, 1080]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = FINAL
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 9
      stopVal [duration (s)] = 1
      text = end
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    EyetrackerRecordComponent et_stop
      actionType = Stop Only
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  Routine blockSelect
    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        nRepsvis=0
        nRepsaud=0
        nRepsmot=0
        nRepscog=0
        nRepsblank=0
      Begin Routine:
        if trialSelect ==1:
            nRepsvis=1
            nRepsaud=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==2:
            nRepsvis=0
            nRepsaud=1
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==3:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=3
            nRepscog=0
            nRepsblank=0
        if trialSelect ==4:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=0
            nRepscog=1
            nRepsblank=0
        if trialSelect ==5:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=1
        print trialSelect
  Routine vis
    CodeComponent code_2
      Code Type = Auto->JS
      Begin Routine:
        gratingPhase=0
        frameCounter=0
      Each Frame:
        frameCounter=frameCounter+1

        if frameCounter<30:  # Change this number (30) to make the grating switch direction more/less often
            gratingPhase=gratingPhase+0.1 # Change this number (0.1) to speed up or slow down the grating

        if frameCounter>=30: # Change this number (30) to make the grating switch direction more/less of
            gratingPhase=gratingPhase-0.1 # Change this number (0.1) to speed up or slow down the grating

        if frameCounter==60:
            frameCounter=0
      End Routine:
        gratingPhase=0
    GratingComponent grating
      mask = gauss
      phase [set every frame] = gratingPhase
      sf = 12
      size = [1.3, 1.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      tex = sin
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    PolygonComponent polygon
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      shape = circle
      size = [0.03, 0.05]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine cog
    PolygonComponent eye_movement_fixation
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      pos [set every repeat] = [xpos, ypos]
      shape = circle
      size = [0.03, 0.05]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine blank
    PolygonComponent fixation
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      shape = circle
      size = [0.03, 0.05]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine trialSelection
    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        nRepsvis=0
        nRepsmot=0
        nRepscog=0
        nRepsblank=0
      Begin Routine:
        if trialSelect ==1:
            nRepsvis=1
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==2:
            nRepsvis=0
            nRepsmot=3
            nRepscog=0
            nRepsblank=0
        if trialSelect ==3:
            nRepsvis=0
            nRepsmot=0
            nRepscog=1
            nRepsblank=0
        if trialSelect ==4:
            nRepsvis=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=1
        print(trialSelect)
  Routine intro
    TextComponent wait_trigger
      letterHeight = 0.08
      pos = [0, -0.95]
      startVal [time (s)] = 0.0
      text = The program is ready for the scanner trigger. Press t to proceed manually.
      wrapWidth = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent fix_desc
      letterHeight = 0.15
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = In this task you will see a grating patterns on the screen. Please keep your eyes on the red fixation circle like the one below.
      wrapWidth = 1.7
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    PolygonComponent fixation_example
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent et_desc
      letterHeight = 0.15
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = When the red fixation point moves, please follow it with your eyes.
      wrapWidth = 1.7
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine start_et
    EyetrackerRecordComponent et_start
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine mot
    TextComponent ft_hand
      letterHeight = 0.15
      pos [set every repeat] = [ft_xpos, 0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $hand
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Flow
  EyetrackerCalibrationRoutine calibration
  Routine intro
  Routine start_et
  LoopInitiator trialSelectLoop loopType="TrialHandler"
    conditionsFile = trial_sequenceA.csv
    loopType = sequential
    nReps = 1
    random seed = 1
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    conditions:
      [{'trialStart': 0, 'trialEnd': 3, 'trialNum': 1, 'trialType': 'visual', 'trialSelect': 1},
      {'trialStart': 3, 'trialEnd': 6, 'trialNum': 2, 'trialType': 'auditory', 'trialSelect': 2},
      {'trialStart': 6, 'trialEnd': 9, 'trialNum': 3, 'trialType': 'visual', 'trialSelect': 1},
      {'trialStart': 9, 'trialEnd': 12, 'trialNum': 4, 'trialType': 'cognitive', 'trialSelect': 4},
      {'trialStart': 12, 'trialEnd': 15, 'trialNum': 5, 'trialType': 'blank', 'trialSelect': 5},
      {'trialStart': 15, 'trialEnd': 18, 'trialNum': 6, 'trialType': 'motor', 'trialSelect': 3},
      {'trialStart': 18, 'trialEnd': 21, 'trialNum': 7, 'trialType': 'cognitive', 'trialSelect': 4},
      {'trialStart': 21, 'trialEnd': 24, 'trialNum': 8, 'trialType': 'blank', 'trialSelect': 5},
      {'trialStart': 24, 'trialEnd': 27, 'trialNum': 9, 'trialType': 'visual', 'trialSelect': 1},
      {'trialStart': 27, 'trialEnd': 30, 'trialNum': 10, 'trialType': 'visual', 'trialSelect': 1},
      {'trialStart': 30, 'trialEnd': 33, 'trialNum': 11, 'trialType': 'visual', 'trialSelect': 1},
      {'trialStart': 33, 'trialEnd': 36, 'trialNum': 12, 'trialType': 'motor', 'trialSelect': 3},
      {'trialStart': 36, 'trialEnd': 39, 'trialNum': 13, 'trialType': 'auditory', 'trialSelect': 2},
      {'trialStart': 39, 'trialEnd': 42, 'trialNum': 14, 'trialType': 'motor', 'trialSelect': 3},
      {'trialStart': 42, 'trialEnd': 45, 'trialNum': 15, 'trialType': 'auditory', 'trialSelect': 2},
      {'trialStart': 45, 'trialEnd': 48, 'trialNum': 16, 'trialType': 'blank', 'trialSelect': 5}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
    Routine trialSelection
    LoopInitiator visLoop loopType="TrialHandler"
      loopType = random
      nReps = nRepsvis
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      Routine vis
    LoopTerminator visLoop
    LoopInitiator cogLoop loopType="TrialHandler"
      conditionsFile = xpos_ypos.csv
      loopType = random
      nReps = nRepscog
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      conditions:
        [{'xpos': 0.7, 'ypos': 0.0},
        {'xpos': 0.5, 'ypos': 0.6},
        {'xpos': 0.5, 'ypos': -0.6},
        {'xpos': -0.7, 'ypos': 0.0},
        {'xpos': -0.5, 'ypos': -0.6},
        {'xpos': -0.5, 'ypos': 0.6}]
      Routine cog
    LoopTerminator cogLoop
    LoopInitiator ftLoop loopType="TrialHandler"
      conditionsFile = fingertapping.csv
      loopType = random
      nReps = nRepsmot
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      conditions:
        [OrderedDict([('hand', 'LEFT'), ('ft_xpos', -0.5)]),
        OrderedDict([('hand', 'RIGHT'), ('ft_xpos', 0.5)]),
        OrderedDict([('hand', 'BOTH'), ('ft_xpos', 0.0)])]
      Routine mot
    LoopTerminator ftLoop
    LoopInitiator blankLoop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblank
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      Routine blank
    LoopTerminator blankLoop
  LoopTerminator trialSelectLoop
  Routine end
