PsychoPy2experiment version="2022.3.0dev6"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = breath_holding_task
  keyboardBackend = ioHub
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Routines
  Routine breath_out
    PolygonComponent polygon_2
      fillColor = 1.0000, 0.2941, -1.0000
      lineColor = 1.0000, 0.2941, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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  Routine test_block_end
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = End of test block
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  Routine test_block_end_2
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Test block conducted
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  Routine intro
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for trigger. To proceed manually press "t".
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    KeyboardComponent key_resp
      allowedKeys = 't','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breath
    PolygonComponent polygon_4
      fillColor = -1.0000, 0.0039, -1.0000
      lineColor = -1.0000, 0.0039, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.7
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    PolygonComponent polygon_5
      fillColor = 1.0000, 1.0000, -1.0000
      lineColor = 1.0000, 1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 2.7
      stopVal [duration (s)] = 2.3
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    SerialOutComponent D8
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 1
      stopVal [duration (s)] = 2.7
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine breath_last
    PolygonComponent polygon_6
      fillColor = -0.4000, 0.4539, -0.4000
      lineColor = -0.4000, 0.4539, -0.4000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.7
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    PolygonComponent polygon_7
      fillColor = 1.0000, 0.2500, -1.0000
      lineColor = 1.0000, 0.2500, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 2.7
      stopVal [duration (s)] = 2.3
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    SerialOutComponent D8_2
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 1
      stopVal [duration (s)] = 2.7
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine done
    TextComponent finished
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25.0
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      text:
        Finished!

        Please keep breathing at a comfortable pace
  Routine instructions
    TextComponent directions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Breath-holding task

        Breathe through your nose during the whole experiment.

        DO NO HOLD YOUR BREATH (red color) IN THE FIRST TRIAL.
        A message will let you know when to start holding your breath in red.
    SerialOutComponent all_CH
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 4
      stopVal [duration (s)] = 0.5
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine test_trial_end
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        End of test trial

        Please engage in the task and HOLD YOUR BREATH during the red colored rectangles.
  Routine hold_test
    PolygonComponent bh_body
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 13
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    PolygonComponent bh_end
      fillColor = 1.0000, -0.1200, -0.1200
      lineColor = 1.0000, -0.1200, -0.1200
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 2
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    SerialOutComponent D9
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 2
      stopVal [duration (s)] = 15
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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    TextComponent end_trial_msg
      letterHeight = 0.05
      startVal [time (s)] = 15
      stopVal [duration (s)] = 5.0
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      text:
        End of test trial

        Please engage in the task and HOLD YOUR BREATH during the red colored rectangles.
  Routine hold
    PolygonComponent bh_body_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 13
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    PolygonComponent bh_end_2
      fillColor = 1.0000, -0.1200, -0.1200
      lineColor = 1.0000, -0.1200, -0.1200
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 2
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    PolygonComponent bh_end_3
      fillColor = 0, 0, 0
      lineColor = 0, 0, 0
      shape = rectangle
      size = (0.5, 0.02)
      startVal [time (s)] = 15
      stopVal [duration (s)] = 10
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    SerialOutComponent D9_2
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 2
      stopVal [duration (s)] = 15
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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Flow
  Routine intro
  Routine instructions
  LoopInitiator normal_respiratory_rate loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine breath
  LoopTerminator normal_respiratory_rate
  Routine breath_last
  Routine hold_test
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    LoopInitiator normal_respiratory_rate_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine breath
    LoopTerminator normal_respiratory_rate_2
    Routine breath_last
    Routine hold
  LoopTerminator trials
  Routine done
