PsychoPy2experiment version="2022.3.0dev6"
Settings
  Data filename = u'data/control_task_%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Screen = 1
  Units = norm
  Use version = 2022.3.0dev6
  Window size (pixels) = [1920, 1080]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = FINAL
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = end. Press "t"
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    EyetrackerRecordComponent et_stop
      actionType = Stop Only
      stopVal [duration (s)] = 1
      syncScreenRefresh = True
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    KeyboardComponent key_resp_3
      allowedKeys = 't','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        ioServer.getDevice('tracker').sendMessage("bye pct")
    SerialOutComponent D8_2
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 1
      stopVal [duration (s)] = 0.5
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine blockSelect
    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        nRepsvis=0
        nRepsaud=0
        nRepsmot=0
        nRepscog=0
        nRepsblank=0
      Begin Routine:
        if trialSelect ==1:
            nRepsvis=1
            nRepsaud=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==2:
            nRepsvis=0
            nRepsaud=1
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==3:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=3
            nRepscog=0
            nRepsblank=0
        if trialSelect ==4:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=0
            nRepscog=1
            nRepsblank=0
        if trialSelect ==5:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=1
        print trialSelect
  Routine vis
    CodeComponent code_2
      Code Type = Auto->JS
      Begin Routine:
        gratingPhase=0
        frameCounter=0
      Each Frame:
        frameCounter=frameCounter+1

        if frameCounter<30:  # Change this number (30) to make the grating switch direction more/less often
            gratingPhase=gratingPhase+0.1 # Change this number (0.1) to speed up or slow down the grating

        if frameCounter>=30: # Change this number (30) to make the grating switch direction more/less of
            gratingPhase=gratingPhase-0.1 # Change this number (0.1) to speed up or slow down the grating

        if frameCounter==60:
            frameCounter=0
      End Routine:
        gratingPhase=0
    GratingComponent grating
      mask = gauss
      phase [set every frame] = gratingPhase
      sf = 12
      size = [1.3, 1.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      tex = sin
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    PolygonComponent polygon
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      shape = circle
      size = [0.03, 0.05]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    SerialOutComponent D9
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 2
      stopVal [duration (s)] = 3
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        ioServer.getDevice('tracker').sendMessage("start vis loop")
      End Routine:
        ioServer.getDevice('tracker').sendMessage("stop vis loop")
  Routine cog
    PolygonComponent eye_movement_fixation
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos [set every repeat] = [xpos, ypos]
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SerialOutComponent D10
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 4
      stopVal [duration (s)] = 0.5
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        ioServer.getDevice('tracker').sendMessage("start cog loop")
      End Routine:
        ioServer.getDevice('tracker').sendMessage("stop cog loop")
    PolygonComponent eye_movement_fixation_inner
      fillColor = $[1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos [set every repeat] = [xpos, ypos]
      shape = circle
      size = [0.035, 0.045]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine blank
    PolygonComponent fixation
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    SerialOutComponent D12
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 16
      stopVal [duration (s)] = 3
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        ioServer.getDevice('tracker').sendMessage("start blank loop")
      End Routine:
        ioServer.getDevice('tracker').sendMessage("stop blank loop")
    PolygonComponent fixation_inner
      fillColor = $[1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine trialSelection
    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        nRepsvis=0
        nRepsmot=0
        nRepscog=0
        nRepsblank=0
      Begin Routine:
        if trialSelect ==1:
            nRepsvis=1
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==2:
            nRepsvis=0
            nRepsmot=1
            nRepscog=0
            nRepsblank=0
        if trialSelect ==3:
            nRepsvis=0
            nRepsmot=0
            nRepscog=1
            nRepsblank=0
        if trialSelect ==4:
            nRepsvis=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=1
        print(trialSelect)
  Routine intro
    TextComponent wait_trigger
      letterHeight = 0.08
      pos = [0, -0.95]
      startVal [time (s)] = 0.0
      text = The program is ready for the scanner trigger. Press t to proceed manually.
      wrapWidth = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = ['t', 's']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent fix_desc
      letterHeight = 0.15
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = In this task you will see a grating patterns on the screen. Please keep your eyes on the red fixation circle like the one below.
      wrapWidth = 1.7
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    PolygonComponent fixation_example
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      shape = circle
      size = (0.075, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent et_desc
      letterHeight = 0.15
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = When the red fixation point moves, please follow it with your eyes.
      wrapWidth = 1.7
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    PolygonComponent fixation_example_inner
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      shape = circle
      size = (0.035, 0.047)
      startVal [time (s)] = 0.0
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  Routine start_et
    EyetrackerRecordComponent et_start
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        ioServer.getDevice('tracker').sendMessage("hello pct")
    SerialOutComponent D8
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 1
      stopVal [duration (s)] = 0.5
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine mot
    TextComponent ft_hand
      letterHeight = 0.15
      pos [set every repeat] = [ft_xpos, 0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $hand
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    SerialOutComponent D11
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = 8
      stopVal [duration (s)] = 5
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        ioServer.getDevice('tracker').sendMessage("start mot loop")
      End Routine:
        ioServer.getDevice('tracker').sendMessage("stop mot loop")
  Routine endblock
  Routine block
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Press t or s to end the experiment
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    EyetrackerRecordComponent etRecord
      actionType = Stop Only
      stopVal [duration (s)] = 1.
      syncScreenRefresh = True
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    KeyboardComponent key_resp
      allowedKeys = 't','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = -1.0000, -1.0000, -1.0000
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = red
    innerRadius = 0.035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.075
    progressMode = time
    randomisePos = False
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  Routine intro
  Routine start_et
  LoopInitiator trialSelectLoop loopType="TrialHandler"
    conditionsFile = trial_select.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trialNum', 0), ('trialSelect', 1), ('trialType', 'visual')]),
      OrderedDict([('trialNum', 1), ('trialSelect', 1), ('trialType', 'visual')]),
      OrderedDict([('trialNum', 2), ('trialSelect', 3), ('trialType', 'cognitive')]),
      OrderedDict([('trialNum', 3), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 4), ('trialSelect', 2), ('trialType', 'motor')]),
      OrderedDict([('trialNum', 5), ('trialSelect', 3), ('trialType', 'cognitive')]),
      OrderedDict([('trialNum', 6), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 7), ('trialSelect', 1), ('trialType', 'visual')]),
      OrderedDict([('trialNum', 8), ('trialSelect', 1), ('trialType', 'visual')]),
      OrderedDict([('trialNum', 9), ('trialSelect', 1), ('trialType', 'visual')]),
      OrderedDict([('trialNum', 10), ('trialSelect', 2), ('trialType', 'motor')]),
      OrderedDict([('trialNum', 11), ('trialSelect', 2), ('trialType', 'motor')]),
      OrderedDict([('trialNum', 12), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 13), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 14), ('trialSelect', 2), ('trialType', 'motor')]),
      OrderedDict([('trialNum', 15), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 16), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 17), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 18), ('trialSelect', 1), ('trialType', 'visual')])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
    Routine trialSelection
    LoopInitiator visLoop loopType="TrialHandler"
      loopType = random
      nReps = nRepsvis
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      Routine vis
    LoopTerminator visLoop
    LoopInitiator cogLoop loopType="TrialHandler"
      conditionsFile = xpos_ypos.csv
      loopType = random
      nReps = nRepscog
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      conditions:
        [OrderedDict([('xpos', 0.7), ('ypos', 0.0)]),
        OrderedDict([('xpos', 0.5), ('ypos', 0.6)]),
        OrderedDict([('xpos', 0.5), ('ypos', -0.6)]),
        OrderedDict([('xpos', -0.7), ('ypos', 0.0)]),
        OrderedDict([('xpos', -0.5), ('ypos', -0.6)]),
        OrderedDict([('xpos', -0.5), ('ypos', 0.6)])]
      Routine cog
    LoopTerminator cogLoop
    LoopInitiator ftLoop loopType="TrialHandler"
      conditionsFile = fingertapping.csv
      loopType = random
      nReps = nRepsmot
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      conditions:
        [OrderedDict([('hand', 'LEFT'), ('ft_xpos', -0.5)]),
        OrderedDict([('hand', 'RIGHT'), ('ft_xpos', 0.5)]),
        OrderedDict([('hand', 'BOTH'), ('ft_xpos', 0.0)])]
      Routine mot
    LoopTerminator ftLoop
    LoopInitiator blankLoop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblank
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      Routine blank
    LoopTerminator blankLoop
  LoopTerminator trialSelectLoop
  Routine end
