PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'../HCPh-data/Psychopy/session-'+data.getDateStr(format="%Y-%m-%d")+'/%s_%s_%s_session_%s' %(expName, expInfo['date'],expInfo['trial'],expInfo['session'])
  Experiment info = {'trial': '$trial', 'session': '9999'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = fixation
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine trial
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  Routine fixation
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    PolygonComponent fixation_out
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    PolygonComponent fixation_in
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1800.0
      syncScreenRefresh = False
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    PolygonComponent fixation_out_2
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 1770
      stopVal [duration (s)] = 30
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    PolygonComponent fixation_in_2
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 1770
      stopVal [duration (s)] = 30
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    CodeComponent channel2_start
      Code Type = Auto->JS
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      Before Experiment:
        import socket
        from hcphsignals import signals
        from datetime import datetime
        import pwd
        def send_message(message, addr="localhost", port=2023):
            client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            client_socket.connect((addr, port))
            client_socket.sendall(message)
            client_socket.close()
        current_user = pwd.getpwuid(os.geteuid()).pw_name
        folder_path = os.path.dirname('/home/'+current_user +'/workspace/HCPh-data/Psychopy/session-'+data.getDateStr(format="%Y-%m-%d")+'/')
        if not os.path.exists(folder_path):
            os.makedirs(folder_path)
        ename = 'fixation_'+data.getDateStr(format="%Y-%m-%d")

        trial = 0
        for file in os.listdir(folder_path):
            filename_hour = datetime.strptime(file.split('_')[2],'%Hh%M.%S.%f')
            current_time = datetime.now()

            filename_hour_components = (filename_hour.hour, filename_hour.minute)
            current_time_components = (current_time.hour, current_time.minute)
            hour_difference = abs((current_time_components[0] - filename_hour_components[0]) +
                             (current_time_components[1] - filename_hour_components[1]) / 60.0)

            if ename in file and '.log' in file and hour_difference <1.5:
                trial += 1
      Begin Routine:
        send_message((signals.RUN | signals.ET_START_AND_STOP).to_bytes())
        ioServer.getDevice('tracker').sendMessage("hello fixation")
      End Routine:
        send_message(signals.ET_START_AND_STOP.to_bytes())
        ioServer.getDevice('tracker').sendMessage("bye fixation")
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = -1,-1,-1,-1
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.075
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine trigger_wait
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  Routine triggerwait
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    KeyboardComponent key_resp
      allowedKeys = 't', 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent et_desc
      letterHeight = 0.12
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = We're beginning the DWI task. Please keep your eyes on the central dot.
      wrapWidth = 1.7
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Flow
  EyetrackerCalibrationRoutine calibration
  Routine triggerwait
  Routine fixation
