PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'../HCPh-data/Psychopy/session-'+data.getDateStr(format="%Y-%m-%d")+'/%s_%s_%s_session_%s' %(expName, expInfo['date'],expInfo['trial'],expInfo['session'])
  Experiment info = {'trial': '$trial', 'session': '9999'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Save wide csv file = False
  Screen = 1
  Units = norm
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1080]
  color = $[-1.0000, -1.0000, -1.0000]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = qct
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine end
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    EyetrackerRecordComponent et_stop
      actionType = Stop Only
      stopVal [condition] = True
      syncScreenRefresh = True
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    CodeComponent channel_2_2
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.ET_START_AND_STOP.to_bytes())
        ioServer.getDevice('tracker').sendMessage("bye qct")
      Each Frame:
        if et_stop.status == NOT_STARTED:
            et_stop.status = STARTED
  Routine blockSelect
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    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        nRepsvis=0
        nRepsaud=0
        nRepsmot=0
        nRepscog=0
        nRepsblank=0
      Begin Routine:
        if trialSelect ==1:
            nRepsvis=1
            nRepsaud=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==2:
            nRepsvis=0
            nRepsaud=1
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==3:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=3
            nRepscog=0
            nRepsblank=0
        if trialSelect ==4:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=0
            nRepscog=1
            nRepsblank=0
        if trialSelect ==5:
            nRepsvis=0
            nRepsaud=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=1
        print trialSelect
  Routine vis
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    CodeComponent code_2
      Code Type = Auto->JS
      Begin Routine:
        gratingPhase=0
        frameCounter=0
      Each Frame:
        frameCounter=frameCounter+1

        if frameCounter<30:  # Change this number (30) to make the grating switch direction more/less often
            gratingPhase=gratingPhase+0.1 # Change this number (0.1) to speed up or slow down the grating

        if frameCounter>=30: # Change this number (30) to make the grating switch direction more/less of
            gratingPhase=gratingPhase-0.1 # Change this number (0.1) to speed up or slow down the grating

        if frameCounter==60:
            frameCounter=0
      End Routine:
        gratingPhase=0
    GratingComponent grating
      mask = gauss
      phase [set every frame] = gratingPhase
      sf = 12
      size = [1.3, 1.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      tex = sin
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    PolygonComponent fixation_inner_circle
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      shape = circle
      size = [0.035, 0.045]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent channel_4
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.QCT_VIS.to_bytes())
        ioServer.getDevice('tracker').sendMessage("start vis loop")
      End Routine:
        ioServer.getDevice('tracker').sendMessage("stop vis loop")
  Routine cog
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    PolygonComponent eye_movement_fixation
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos [set every repeat] = [xpos, ypos]
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent eye_movement_fixation_inner
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos [set every repeat] = [xpos, ypos]
      shape = circle
      size = [0.035, 0.045]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent channel_8
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.QCT_COG.to_bytes())
        ioServer.getDevice('tracker').sendMessage("start cog loop")
      End Routine:
        ioServer.getDevice('tracker').sendMessage("stop cog loop")
  Routine blank
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    PolygonComponent fixation
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    PolygonComponent fixation_inner
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent channel_20
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.QCT_BLANK.to_bytes())
        ioServer.getDevice('tracker').sendMessage("start blank loop")
      End Routine:
        ioServer.getDevice('tracker').sendMessage("stop blank loop")
  Routine trialSelection
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    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        nRepsvis=0
        nRepsmot=0
        nRepscog=0
        nRepsblank=0
      Begin Routine:
        if trialSelect ==1:
            nRepsvis=1
            nRepsmot=0
            nRepscog=0
            nRepsblank=0
        if trialSelect ==2:
            nRepsvis=0
            nRepsmot=1
            nRepscog=0
            nRepsblank=0
        if trialSelect ==3:
            nRepsvis=0
            nRepsmot=0
            nRepscog=1
            nRepsblank=0
        if trialSelect ==4:
            nRepsvis=0
            nRepsmot=0
            nRepscog=0
            nRepsblank=1
        print(trialSelect)
  Routine intro
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    TextComponent wait_trigger
      letterHeight = 0.07
      pos = [0, -0.9]
      startVal [time (s)] = 0.0
      text = The program is ready for the scanner trigger. Press t to proceed manually.
      wrapWidth = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = ['t', 's']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent fix_desc
      letterHeight = 0.12
      pos = (0.0, 0.6)
      startVal [time (s)] = 0.0
      text = This task is composed of several blocks of stimuli. Whenever you see a green circle like the one below, please fix your gaze on it. If the circle moves, follow it with your eyes.
      wrapWidth = 1.7
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    PolygonComponent fixation_example
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos = (0, 0.1)
      shape = circle
      size = (0.075, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent et_desc
      letterHeight = 0.12
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
         If you see "RIGHT" or "LEFT", sequentially tap your thumb with your other fingers of the corresponding hand.
        Please leave the alarm button somewhere you can retrieve it when the task is concluded.
    PolygonComponent fixation_example_inner
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      pos = (0, 0.1)
      shape = circle
      size = (0.035, 0.047)
      startVal [time (s)] = 0.0
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  Routine start_et
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    EyetrackerRecordComponent et_start
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent channel_2
      Code Type = Auto->JS
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      Before Experiment:
        import socket
        from hcphsignals import signals
        from datetime import datetime
        import pwd
        def send_message(message, addr="localhost", port=2023):
            client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            client_socket.connect((addr, port))
            client_socket.sendall(message)
            client_socket.close()
        current_user = pwd.getpwuid(os.geteuid()).pw_name
        folder_path = os.path.dirname('/home/'+current_user +'/workspace/HCPh-data/Psychopy/session-'+data.getDateStr(format="%Y-%m-%d")+'/')
        if not os.path.exists(folder_path):
            os.makedirs(folder_path)

        ename = 'qct_'+data.getDateStr(format="%Y-%m-%d")
        trial = 0
        for file in os.listdir(folder_path):
            filename_hour = datetime.strptime(file.split('_')[2],'%Hh%M.%S.%f')
            current_time = datetime.now()

            filename_hour_components = (filename_hour.hour, filename_hour.minute)
            current_time_components = (current_time.hour, current_time.minute)
            hour_difference = abs((current_time_components[0] - filename_hour_components[0]) +
                             (current_time_components[1] - filename_hour_components[1]) / 60.0)

            if ename in file and '.log' in file and hour_difference <1.5:
                trial += 1
      Begin Routine:
        send_message((signals.RUN | signals.ET_START_AND_STOP).to_bytes())
        ioServer.getDevice('tracker').sendMessage("hello qct")
  Routine mot
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    TextComponent ft_hand
      letterHeight = 0.15
      pos [set every repeat] = [ft_xpos, 0]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $hand
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    CodeComponent channel_10
      Code Type = Auto->JS
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      Begin Routine:
        send_message(signals.QCT_MOT.to_bytes())
        ioServer.getDevice('tracker').sendMessage("start mot loop")
      End Routine:
        ioServer.getDevice('tracker').sendMessage("stop mot loop")
  Routine endblock
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  Routine block
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Press t or s to end the experiment
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    EyetrackerRecordComponent etRecord
      actionType = Stop Only
      stopVal [duration (s)] = 1.
      syncScreenRefresh = True
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    KeyboardComponent key_resp
      allowedKeys = 't','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = -1.0000, -1.0000, -1.0000
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.075
    progressMode = time
    randomisePos = False
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  Routine intro
  Routine start_et
  LoopInitiator trialSelectLoop loopType="TrialHandler"
    conditionsFile = trial_select.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trialNum', 0), ('trialSelect', 1), ('trialType', 'visual')]),
      OrderedDict([('trialNum', 1), ('trialSelect', 1), ('trialType', 'visual')]),
      OrderedDict([('trialNum', 2), ('trialSelect', 3), ('trialType', 'cognitive')]),
      OrderedDict([('trialNum', 3), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 4), ('trialSelect', 2), ('trialType', 'motor')]),
      OrderedDict([('trialNum', 5), ('trialSelect', 3), ('trialType', 'cognitive')]),
      OrderedDict([('trialNum', 6), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 7), ('trialSelect', 1), ('trialType', 'visual')]),
      OrderedDict([('trialNum', 8), ('trialSelect', 1), ('trialType', 'visual')]),
      OrderedDict([('trialNum', 9), ('trialSelect', 1), ('trialType', 'visual')]),
      OrderedDict([('trialNum', 10), ('trialSelect', 2), ('trialType', 'motor')]),
      OrderedDict([('trialNum', 11), ('trialSelect', 2), ('trialType', 'motor')]),
      OrderedDict([('trialNum', 12), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 13), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 14), ('trialSelect', 2), ('trialType', 'motor')]),
      OrderedDict([('trialNum', 15), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 16), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 17), ('trialSelect', 4), ('trialType', 'blank')]),
      OrderedDict([('trialNum', 18), ('trialSelect', 1), ('trialType', 'visual')])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
    Routine trialSelection
    LoopInitiator visLoop loopType="TrialHandler"
      loopType = random
      nReps = nRepsvis
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      Routine vis
    LoopTerminator visLoop
    LoopInitiator cogLoop loopType="TrialHandler"
      conditionsFile = xpos_ypos.csv
      loopType = random
      nReps = nRepscog
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      conditions:
        [OrderedDict([('xpos', 0.7), ('ypos', 0.0)]),
        OrderedDict([('xpos', 0.5), ('ypos', 0.6)]),
        OrderedDict([('xpos', 0.5), ('ypos', -0.6)]),
        OrderedDict([('xpos', -0.7), ('ypos', 0.0)]),
        OrderedDict([('xpos', -0.5), ('ypos', -0.6)]),
        OrderedDict([('xpos', -0.5), ('ypos', 0.6)])]
      Routine cog
    LoopTerminator cogLoop
    LoopInitiator ftLoop loopType="TrialHandler"
      conditionsFile = fingertapping.csv
      loopType = random
      nReps = nRepsmot
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      conditions:
        [OrderedDict([('hand', 'LEFT'), ('ft_xpos', -0.5)]),
        OrderedDict([('hand', 'RIGHT'), ('ft_xpos', 0.5)]),
        OrderedDict([('hand', 'BOTH'), ('ft_xpos', 0.0)])]
      Routine mot
    LoopTerminator ftLoop
    LoopInitiator blankLoop loopType="TrialHandler"
      loopType = random
      nReps = nRepsblank
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      Routine blank
    LoopTerminator blankLoop
  LoopTerminator trialSelectLoop
  Routine end
