PsychoPy2experiment version="2022.3.0dev6"
Settings
  Data filename = u'data/%s_%s_%s' % (expName, expInfo['date'], expInfo['trial'])
  Experiment info = {'trial': '$trial'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save hdf5 file = True
  Screen = 1
  Units = norm
  Use version = 2022.3.0dev6
  Window size (pixels) = [1920, 1080]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = resting_state
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine resting
    MovieComponent movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      movie = /usr/local/share/data/movie_experiment.mp4
      size = (2,2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1200
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    SerialOutComponent D8
      baudrate = 9600
      bytesize = 8
      disabled = True
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 0.0
      startdata = $("\x03")
      stopVal [duration (s)] = 0.008
      stopbits = 1
      syncScreenRefresh = False
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    SerialOutComponent D8_2
      baudrate = 9600
      bytesize = 8
      disabled = True
      getResponse = False
      parity = N
      port = /dev/ttyACM0
      startVal [time (s)] = 1200
      startdata = $("\x02")
      stopVal [duration (s)] = 0.008
      stopbits = 1
      syncScreenRefresh = False
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    CodeComponent channel_2
      Code Type = Auto->JS
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      Begin Routine:
        send_message(b"\x20")
        ioServer.getDevice('tracker').sendMessage("start movie")
      End Routine:
        send_message(b"\x40")
        ioServer.getDevice('tracker').sendMessage("end movie")
  Routine intro
    KeyboardComponent key_resp
      allowedKeys = 't', 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = During this task, you will watch a movie. Please avoid closing your eye and moving. It is particularly important to stay still at the beginning of the task.
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.075
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
  Routine fixation_and_start_ET
    PolygonComponent fixation_out
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.0
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    PolygonComponent fixation_in
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    EyetrackerRecordComponent etRecord_2
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent channel2_start
      Code Type = Auto->JS
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      Before Experiment:
        import socket
        def send_message(message, addr="localhost", port=2023):
            client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            client_socket.connect((addr, port))
            client_socket.sendall(message)
            client_socket.close()



        folder_path = os.path.dirname(os.path.abspath(__file__))+ os.sep + 'data/'

        ename = 'resting_state_'+data.getDateStr(format="%Y-%m-%d")

        trial = 0
        for file in os.listdir(folder_path):
            if ename in file and '.log' in file:
                trial += 1
      Begin Routine:
        send_message(b"\x06")
        ioServer.getDevice('tracker').sendMessage("start fixation")
      End Routine:
        send_message(b"\x10")
        ioServer.getDevice('tracker').sendMessage("end fixation")
  Routine fixation
    PolygonComponent fixation_out_2
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.075, 0.1]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.0
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    PolygonComponent fixation_in_2
      fillColor = $[-1,1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      shape = circle
      size = [0.035, 0.047]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent channel2_start_2
      Code Type = Auto->JS
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      Begin Routine:
        print('start fixation')
        send_message(b"\x04")
        ioServer.getDevice('tracker').sendMessage("start fixation")
      End Routine:
        send_message(b"\x10")
        ioServer.getDevice('tracker').sendMessage("end fixation")
  Routine stop_ET
    TextComponent text_2
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = end. Press "t"
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    KeyboardComponent key_resp_3
      allowedKeys = 't','s'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord
      actionType = Stop Only
      stopVal [condition] = True
      syncScreenRefresh = False
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    CodeComponent code_fixation_3
      Code Type = Auto->JS
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      Begin Routine:
        ioServer.getDevice('tracker').sendMessage("Bye rs")
        send_message(b"\x02")
      Each Frame:
        if etRecord.status == NOT_STARTED:
            etRecord.status = STARTED
Flow
  EyetrackerCalibrationRoutine calibration
  Routine fixation_and_start_ET
  Routine intro
  Routine resting
  Routine fixation
  Routine stop_ET
